PsychoPy2experiment version="3.0.7"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1920, 1080]
  expName = 001
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Routines
  Routine trial
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        import csv
        from numpy import random
        from ego.stimulation.face import random_gallery, ucb_gallery

        Path = 'image_data/000/000.png'

        practice_count_num = 1
        PRACTICE_NUM = 10
        practice_most_gallery = []
        practice_result = []

        count_num= -PRACTICE_NUM + 1
        LOOP_NUM = 60
        RANDOM_NUM = 45

        response = []
        result = []
        result_index = []
        start = 0.2
        end = 0.2
      Begin Routine:
        if practice_count_num <= PRACTICE_NUM:
            gallery, index = random_gallery()
            if index[0] <= 9:
                index[0] = '00' + str(index[0])
            elif index[0] <= 99:
                index[0] = '0' + str(index[0])
            else:
                index[0] = str(index[0])

            if index[1] <= 9:
                index[1] = '00' + str(index[1])
            elif index[1] <= 99:
                index[1] = '0' + str(index[1])
            else:
                index[1] = str(index[1])

            if index[2] <= 9:
                index[2] = '00' + str(index[2])
            elif index[2] <= 99:
                index[2] = '0' + str(index[2])
            else:
                index[2] = str(index[2])

            Path = 'image_data/' + index[0] + '/' + index[1] + '/' + index[2] +'.png'
            end = 1.0
        elif count_num <= RANDOM_NUM:
            gallery, index = random_gallery()
            result.append(gallery)
            if index[0] <= 9:
                index[0] = '00' + str(index[0])
            elif index[0] <= 99:
                index[0] = '0' + str(index[0])
            else:
                index[0] = str(index[0])

            if index[1] <= 9:
                index[1] = '00' + str(index[1])
            elif index[1] <= 99:
                index[1] = '0' + str(index[1])
            else:
                index[1] = str(index[1])

            if index[2] <= 9:
                index[2] = '00' + str(index[2])
            elif index[2] <= 99:
                index[2] = '0' + str(index[2])
            else:
                index[2] = str(index[2])

            Path = 'image_data/' + index[0] + '/' + index[1] + '/' + index[2] +'.png'
            result_index.append(index)
            end = 1.0
        else:
            gallery, index = ucb_gallery(result, response)
            result.append(gallery)

            if index[0] <= 9:
                index[0] = '00' + str(index[0])
            elif index[0] <= 99:
                index[0] = '0' + str(index[0])
            else:
                index[0] = str(index[0])

            if index[1] <= 9:
                index[1] = '00' + str(index[1])
            elif index[1] <= 99:
                index[1] = '0' + str(index[1])
            else:
                index[1] = str(index[1])

            if index[2] <= 9:
                index[2] = '00' + str(index[2])
            elif index[2] <= 99:
                index[2] = '0' + str(index[2])
            else:
                index[2] = str(index[2])

            Path = 'image_data/' + index[0] + '/' + index[1] + '/' + index[2] +'.png'
            result_index.append(index)
            start = 0.0
            end = 1.0
        if practice_count_num <= PRACTICE_NUM:
            pass
        elif count_num <= LOOP_NUM:
            response.append(slider.getRating())
        else:
            pass
      End Experiment:
        with open(filename + '_result.csv', 'w') as f:
            writer = csv.writer(f)
            writer.writerows(result)
        f.close()

        with open(filename + '_response.csv', 'w') as f:
            writer = csv.writer(f)
            writer.writerow(response)
        f.close()

        with open(filename + '_result_index.csv', 'w') as f:
            writer = csv.writer(f)
            writer.writerows(result_index)
        f.close()
      End Routine:
        practice_count_num += 1
        count_num += 1
    ImageComponent image_1
      image [set during: trial.ISI] = $Path
      size = (411, 476)
      startVal [time (s)] = 0.2
      units = pix
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    TextComponent text_1
      letterHeight = 32
      pos = (-150, 350)
      startVal [time (s)] = 0.2
      text [set every repeat] = $count_num
      units = pix
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    StaticComponent ISI
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 1
      labels = 1,2,3,4,5
      pos = (0, -0.7)
      size = (0.5, 0.05)
      startVal [time (s)] = 0.2
      styles = ['rating', 'triangleMarker']
      ticks = (1, 2, 3, 4, 5)
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    TextComponent text_3
      letterHeight = 18
      pos = (800, -390)
      startVal [time (s)] = 0.2
      text = 非常にかわいい
      units = pix
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    TextComponent text_4
      letterHeight = 18
      pos = (60, -390)
      startVal [time (s)] = 0.2
      text = 全くかわいくない
      units = pix
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    ImageComponent image
      image = koushinchu.png
      size = (1500, 1000)
      startVal [condition] = slider.rt != 0
      stopVal [duration (s)] = $end
      units = pix
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  Routine instruction
    TextComponent text_2
      letterHeight = 18
      startVal [time (s)] = 0.0
      text = Spaceキーを押すと始まります．
      units = pix
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine practice_instruction
    TextComponent text
      letterHeight = 20
      startVal [time (s)] = 0.0
      units = pix
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      text:
        画面に顔画像が表示されますので，その都度5段階で「かわいさ」を評価してください．
        評価の選択はマウスで行ってください．
        全部で60回評価していただきます．ただし最初の10回は練習です．
        個人差はありますが，全部で15分以内に終わります．
        途中から画像の表示に時間がかかることありますが，コンピュータでの計算に時間がかかっているためです．
        表示が遅い場合はそのままお待ち下さい．

        Spaceキーを押すと始まります。
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine inst
    TextComponent text_5
      letterHeight = 20
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      units = pix
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      text:
        この実験は，人の顔に対する印象がどのような要因によって決まるかを調べるものです．
        お答えいただいたデータは，すべて匿名で処理され，個人が特定されることはありません．
        正しい回答はありませんので，自分の直感に従って，ありのままにお答えください．
  Routine end
    TextComponent text_6
      letterHeight = 22
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      units = pix
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      text:
        実験はこれで終了です。
        ありがとうございました。
Flow
  Routine inst
  Routine practice_instruction
  LoopInitiator practices loopType="TrialHandler"
    loopType = random
    nReps = $PRACTICE_NUM
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    Routine trial
  LoopTerminator practices
  Routine instruction
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = $LOOP_NUM
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    Routine trial
  LoopTerminator trials
  Routine end
